PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = experimento
  keyboardBackend = ioHub
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Routines
  Routine imagenes
    SoundComponent sonido
      sound [set every repeat] = $sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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
    ImageComponent left_image
      anchor = center-left
      image [set every repeat] = $stimulus
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent right_image
      anchor = center-right
      image [set every repeat] = $stimulustwo
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    MouseComponent trial_mouse
      clickable = left_image, right_image
      correctAns = $correct
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
      storeCorrect = True
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    SliderComponent slider
      disabled = True
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2)
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  Routine instrucciones
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ¡Bienvenido! En esta tarea deberá seleccionar una de las imágenes
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Flow
  Routine instrucciones
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = imagenes.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'estimulo': 'pato.png', 'estimulo_2': 'gato.png', 'correct': 'pato.png'},
      {'estimulo': 'rata.png', 'estimulo_2': 'rana.png', 'correct': 'rana.png'}]
    Routine imagenes
  LoopTerminator trials
